#pragma once
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTING {
  function add_buffer( device & star_device, sequence source, sequence & target, sequence & tips, variable volume, variable & number_of_transfers ) void ;
  function dilution_to_output( device & ML_STAR, sequence & source_positions, sequence & target_positions, sequence & tip_positions, variable volume ) void ;
  function input_to_dilution( device & ML_STAR, sequence source_positions, sequence target_positions, sequence & tip_positions, variable volume ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function add_buffer( device & star_device, sequence source, sequence & target, sequence & tips, variable volume, variable & number_of_transfers ) void {
    number_of_transfers = 0;
    {
      number_of_transfers = 0;
      while (
         (target.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, target, 1);
        number_of_transfers = number_of_transfers + 1;
        {
          	star_device._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	star_device._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (target.GetCurrentPosition() > 0 && target.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      target.SetMax(target.GetTotal());
      target.SetCurrentPosition(1);
    }
    star_device._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    Trace(number_of_transfers);
  }

  function input_to_dilution( device & ML_STAR, sequence source_positions, sequence target_positions, sequence & tip_positions, variable volume ) void {
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
  }

  function dilution_to_output( device & ML_STAR, sequence & source_positions, sequence & target_positions, sequence & tip_positions, variable volume ) void {
    {
      while (
         (target_positions.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, target_positions, 1);
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        if (
           (target_positions.GetCurrentPosition() > 0 && target_positions.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      target_positions.SetMax(target_positions.GetTotal());
      target_positions.SetCurrentPosition(1);
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
} // library namespace
