#pragma once
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CHANNELS1ML_8 {
  function aspirate( device & ML_STAR, sequence & io_seqAspirate, variable i_fltVolume, variable i_strLiquidClass, variable i_blnIncrementSequence, variable i_blnLiquidFollowing, variable i_strChannelPattern, variable i_intSequenceUse, variable i_intcLLDSensitivity, variable i_fltSubmergeDepth, variable i_fltFixedHeight, variable i_fltRetractDistance, variable i_blnTouchOff, variable i_fltTouchOffHeight, variable i_intpLLDSensitivity, variable i_fltMaxHeightDifference, variable i_intAspirationMode, variable i_intMixCycles, variable i_fltMixPosition, variable i_fltMixVolume ) void ;
  function dispense( device & ML_STAR, sequence & io_seqDispense, variable i_fltVolume, variable i_blnDispenseRemaining, variable i_blnIncrementSequence, variable i_blnLiquidFollowing, variable i_strChannelPattern, variable i_intSequenceUse, variable i_intcLLDSensitivity, variable i_fltSubmergeDepth, variable i_fltFixedHeight, variable i_fltRetractDistance, variable i_blnTouchOff, variable i_fltTouchOffHeight, variable i_blnSideTouch, variable i_blnMinimizeZHeight, variable i_intMixCycles, variable i_fltMixPosition, variable i_fltMixVolume ) void ;
  function tip_eject( device & ML_STAR, sequence & io_seqEjectPosition, variable i_blnDefaultWaste, variable i_blnIncrementSequence, variable i_strChannelPattern, variable i_intSequenceUse ) void ;
  function tip_pickup( device & ML_STAR, sequence & io_seqTips, variable i_blnIncrementSequence, variable i_strChannelPattern, variable i_intSequenceUse ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function tip_pickup( device & ML_STAR, sequence & io_seqTips, variable i_blnIncrementSequence, variable i_strChannelPattern, variable i_intSequenceUse ) void {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  }

  function tip_eject( device & ML_STAR, sequence & io_seqEjectPosition, variable i_blnDefaultWaste, variable i_blnIncrementSequence, variable i_strChannelPattern, variable i_intSequenceUse ) void {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function aspirate( device & ML_STAR, sequence & io_seqAspirate, variable i_fltVolume, variable i_strLiquidClass, variable i_blnIncrementSequence, variable i_blnLiquidFollowing, variable i_strChannelPattern, variable i_intSequenceUse, variable i_intcLLDSensitivity, variable i_fltSubmergeDepth, variable i_fltFixedHeight, variable i_fltRetractDistance, variable i_blnTouchOff, variable i_fltTouchOffHeight, variable i_intpLLDSensitivity, variable i_fltMaxHeightDifference, variable i_intAspirationMode, variable i_intMixCycles, variable i_fltMixPosition, variable i_fltMixVolume ) void {
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  }

  function dispense( device & ML_STAR, sequence & io_seqDispense, variable i_fltVolume, variable i_blnDispenseRemaining, variable i_blnIncrementSequence, variable i_blnLiquidFollowing, variable i_strChannelPattern, variable i_intSequenceUse, variable i_intcLLDSensitivity, variable i_fltSubmergeDepth, variable i_fltFixedHeight, variable i_fltRetractDistance, variable i_blnTouchOff, variable i_fltTouchOffHeight, variable i_blnSideTouch, variable i_blnMinimizeZHeight, variable i_intMixCycles, variable i_fltMixPosition, variable i_fltMixVolume ) void {
    private variable intDispenseMode;
    if (i_blnDispenseRemaining == 1)
    {
      intDispenseMode = 9;
    }
    else
    {
      intDispenseMode = 8;
    }
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  }
} // library namespace
